import bdv.util.*;

import ij.*;

import java.util.concurrent.*;

import org.janelia.saalfeldlab.n5.*;
import org.janeliai.saalfeldlab.n5.imglib2.*;
import org.janelia.saalfeldlab.n5.imglib2.*;
import org.janelia.saalfeldlab.n5.hdf5.*;
import org.janelia.saalfeldlab.n5.googlecloud.*;

import net.imglib2.img.display.imagej.*;
import net.imglib2.img.imageplus.*;
import net.imglib2.realtransform.*;
import net.imglib2.util.*;
import net.imglib2.view.*;

imp = IJ.getImage();
img = ImagePlusImgs.from(imp);

n5Writer = new N5FSWriter("/groups/hess/hess_collaborators/Annotations/ParentFiles_whole-cell_images/HeLa_Cell2_4x4x4nm/Aubrey_17-7_17_Cell2_4x4x4nm.n5");

exec = Executors.newFixedThreadPool(47);

N5Utils.save(img, n5Writer, "/volumes/raw", new int[]{128,128,128}, new GzipCompression(), exec);
