import bdv.util.*;

import ij.*;

import java.util.concurrent.*;

import org.janelia.saalfeldlab.n5.*;
import org.janeliai.saalfeldlab.n5.imglib2.*;
import org.janelia.saalfeldlab.n5.imglib2.*;
import org.janelia.saalfeldlab.n5.hdf5.*;
import org.janelia.saalfeldlab.n5.googlecloud.*;

import net.imglib2.img.display.imagej.*;
import net.imglib2.img.imageplus.*;
import net.imglib2.realtransform.*;
import net.imglib2.util.*;
import net.imglib2.view.*;

//crop coordinates
x = 7227;
y = 1380;
z = 5608;
w = 200;
h = 200;
d = 200;
xs = x-(w/2);
xe = x+(w/2)-1;
ys = y-(w/2);
ye = y+(w/2)-1;
zs = z-(w/2);
ze = z+(w/2)-1;

n5 = new N5FSReader("/groups/hess/hess_collaborators/Annotations/ParentFiles_whole-cell_images/Jurkat_Cell1_4x4x4nm/Jurkat_Cell1_FS96-Area1_4x4x4nm.n5");

img = N5Utils.open(n5, "/volumes/raw");

crop = Views.interval(img, new long[]{xs, ys, zs}, new long[]{xe, ye, ze});

ImageJFunctions.show(crop, "crop");
