import bdv.util.*;

import ij.*;

import java.util.concurrent.*;

import org.janelia.saalfeldlab.n5.*;
import org.janeliai.saalfeldlab.n5.imglib2.*;
import org.janelia.saalfeldlab.n5.imglib2.*;
import org.janelia.saalfeldlab.n5.hdf5.*;
import org.janelia.saalfeldlab.n5.googlecloud.*;

import net.imglib2.img.display.imagej.*;
import net.imglib2.img.imageplus.*;
import net.imglib2.realtransform.*;
import net.imglib2.util.*;
import net.imglib2.view.*;
import bdv.labels.labelset.*;

import ij.IJ;
import ij.ImagePlus;
import ij.ImageStack;
import ij.process.FloatProcessor;

import net.imglib2.converter.*;

import java.lang.Thread;
import java.lang.Runnable;
import java.util.ArrayList;
import java.util.concurrent.atomic.AtomicInteger;

import net.imglib2.*;
import net.imglib2.converter.*;
import net.imglib2.img.display.imagej.*;
import net.imglib2.img.array.*;
import net.imglib2.img.imageplus.*;
import net.imglib2.interpolation.randomaccess.*;
import net.imglib2.realtransform.*;
import net.imglib2.type.numeric.integer.*;
import net.imglib2.util.*;
import net.imglib2.view.*;
import net.imglib2.converter.*;
import net.imglib2.type.numeric.integer.*;

import bdv.labels.labelset.*;

import org.janelia.saalfeldlab.n5.hdf5.*;
import org.janelia.saalfeldlab.n5.*;
import org.janelia.saalfeldlab.n5.imglib2.*;

import ch.systemsx.cisd.hdf5.*;

hdf5Reader = HDF5Factory.openForReading("/groups/hess/hess_collaborators/Proofreading/01-030819/jurkat_cell1_17900/jurkat_cell1_17900/crop-5.h5");
n5Reader = new N5HDF5Reader(hdf5Reader, true, new int[]{64, 64, 64});

labels = N5Utils.open(n5Reader, "/volumes/labels/merged_ids");
convertedLabels = Views.interval(
	Converters.convert(
		Views.extendZero(labels),
		new RealUnsignedByteConverter(0, 255),
		new UnsignedByteType()),
//		new RealUnsignedByteConverter(0, 65535),
//		new UnsignedShortType()),
	labels);

ImageJFunctions.show(convertedLabels, "img_labels");

